' Alerts
' + Buoy lon/lat outside range -> Buoy off chain. Drifting | Persistent until snoozed. Send Position and SOG/COG
' + Battery Low, Water Infiltration, Winch Mission Error, Winch Download Error  -> Send once until the flag is reset. (Breaker tripped)
' + Instrument Failed sampling. Each time. 

Const EarthRadius = 6371e3
Const _PI_ = 3.141592653589793

' Alert & Warnig Switch for the user to turn on/off
Public Buoy_Adrift_Alert As Boolean = False 
' -> Once the alert is set, the buoy is considered adrift until resetted to false.
'    That way, the email will continue to be sent even if the buoy return within the acceptable range.
Public Buoy_Adrift_Alert_Snoozed As Boolean = False 
' -> Snoozing will only stop the Emails, the buoy is still considere adrift.
Public PositionDeviation As Long


Public Battery_Low_Warning As Boolean = False
Public Water_Infiltration_Warning As Boolean = False
Public Winch_Error_Warning As Boolean = False
Public Winch_Download_Error_Warning As Boolean = False

Dim SaveLog as Boolean = False ' Save log on Failed instrument sampling.

Dim Instrument_Failed_Warnings(15) As Boolean = False
Alias Instrument_Failed_Warnings = ADCP_Warning, Compass_Warning, Triplet_Warning, GPS_Warning, OCR_R_Warning, _
                            OCR_I_Warning, PAR_Warning,PCO2_Warning, Power_Controller_Warning, SBE37_Warning, _
                            Seafet_Warning, Suna_Warning, Wave_Warning, WMT700_Warning, WXT536_Warning

Function ComputePositionDeviation As Float
    ' Uses Haversine Equation
    'Compute the distance of the current position (Latitude_Decimal, Longitude_Decimal) to  (Longitude_0, Latitude_0)
    Dim a As Float = ""
    Dim c As Float = ""

    a = (SIN((Latitude_Decimal - Latitude_0)/2))^2 + COS(Latitude_Decimal) * COS(Latitude_0) * (SIN((Longitude_Decimal - Longitude_0)/2))^2 ' the difference with python is probably due to numerical precision
    c = 2*ATN2(SQR(a), SQR(1-a)) * ( _PI_ / 180) ' This should be fine
    ComputePositionDeviation =  EarthRadius * c
EndFunction

Sub Buoy_Adrift_Check ' Seems to work. Proper test needed
    PositionDeviation = ComputePositionDeviation()
    Call logging("Position Deviation: " & PositionDeviation & " m.")
    If Not Buoy_Adrift_Alert Then
        If PositionDeviation > Allowed_Position_Deviation_m Then 
            Buoy_Adrift_Alert = True
        EndIf
    EndIf

    If Buoy_Adrift_Alert Then
        Call logging("ALERT Buoy Adrift")    
        Call Set_Buoy_Adrift_Alarm
    EndIf
EndSub

Sub Set_Buoy_Adrift_Alarm
' Buoy Adrift Alarm will keep sending email until it is snoozed.
    If Not Buoy_Adrift_Alert_Snoozed Then
        'FIXME TEST IF UNITS OF SOG AND COG Follow
        Call Email_Init(1, "BUOY ADRIFT")
        Call Email_add_line("Lat: " & Latitude)
        Call Email_add_line("Lon: " & Longitude)
        Call Email_add_line("SOG: " & SOG)
        Call Email_add_line("COG: " & COG)
        Call SendEmail
    EndIf
EndSub


Sub Set_Winch_MIssion_Error_Warning
' Winch Missing Error Warning will only send one email when set. The alarm need
' be turned off by the user and set again for a new email to be sent.
    If Not Winch_Error_Warning Then
        Call Email_Init(0, "Winch Mission Error")
        Call SendEmail

        Winch_Error_Warning = True
    EndIf
EndSub


Sub Set_Winch_Download_Error_Warning
' Winch Download Error Warning will only send one email when set. The alarm need
' be turned off by the user and set again for a new email to be sent.
    If Not Winch_Download_Error_Warning Then
        Call Email_Init(0, "Winch Download Error")
        Call SendEmail

        Winch_Download_Error_Warning = True
    EndIf
EndSub


Sub Set_Water_Infiltration_Warning
' Water Infiltration Warning will only send one email when set. The alarm
' need be turned off by the user and set again for a new email to be sent.
    If Not Water_Infiltration_Warning Then
        Call Email_Init(0, "Water Infiltration")
        Call Email_add_line("Water Detection: " &  Water_Detection_Main)
        Call SendEmail

        Water_Infiltration_Warning = True
    EndIf
EndSub


Sub Set_Battery_Low_Warning
' Battery Low Warning will only send one email when set. The alarm need
' be turned off by the user and set again for a new email to be sent.
    If Not Battery_Low_Warning Then
        Call Email_Init(0, "Battery Low")
        Call Email_add_line("VBatt1: " & VBatt1)
        Call Email_add_line("VBatt2: " & VBatt2)
        Call SendEmail

        Battery_Low_Warning = True
    EndIf
EndSub


Sub Failed_Sampling_Warning(_instrument_ As String * 50)
    ' Arguments
    ' ---------
    ' _instrument_ values: 
    '    ADCP, Compass, Triplet, GPS, OCR-R, OCR-I, PAR, PCO2, Power Conttroller,
    '    SBE37, Seafet, Suna, Wave, WMT700, WXT536
    '
    ' Notes
    ' -----
    ' Set the `Reset_Instrument_Warnings_Switch` flag to true to reset the instrument_warning
    Dim _subject_ as String * 50

    Call logging("Instrument Sampling Failed: " & _instrument_)

    _subject_ = _instrument_ & " failed"

    If _instrument_="ADCP" AND NOT ADCP_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        ADCP_Warning = True
        SaveLog = True
    ElseIf _instrument_="Compass" AND NOT Compass_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Compass_Warning = True
        SaveLog = True
    ElseIf _instrument_="Triplet" AND NOT Triplet_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Triplet_Warning = True
        SaveLog = True
    ElseIf _instrument_="GPS" AND NOT GPS_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        GPS_Warning = True
        SaveLog = True
    ElseIf _instrument_="OCR-R" AND NOT OCR_R_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        OCR_R_Warning = True
        SaveLog = True
    ElseIf _instrument_="OCR-I" AND NOT OCR_I_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        OCR_I_Warning = True
        SaveLog = True
    ElseIf _instrument_="PAR" AND NOT PAR_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        PAR_Warning = True
        SaveLog = True
    ElseIf _instrument_="PCO2" AND NOT PCO2_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        PCO2_Warning = True
        SaveLog = True
    ElseIf _instrument_="Power Controller" AND NOT Power_Controller_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Power_Controller_Warning = True
        SaveLog = True
    ElseIf _instrument_="SBE37" AND NOT SBE37_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        SBE37_Warning = True
        SaveLog = True
    ElseIf _instrument_="Seafet" AND NOT Seafet_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Seafet_Warning = True
        SaveLog = True
    ElseIf _instrument_="Suna" AND NOT Suna_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Suna_Warning = True
        SaveLog = True
    ElseIf _instrument_="Wave" AND NOT Wave_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        Wave_Warning = True
        SaveLog = True
    ElseIf _instrument_="WMT700" AND NOT WMT700_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        WMT700_Warning = True
        SaveLog = True
    ElseIf _instrument_="WXT536" AND NOT WXT536_Warning Then
        Call Email_Init(0, _subject_):Call SendEmail
        WXT536_Warning = True
        SaveLog = True
    EndIf
EndSub
