ConstTable (Buoy_Config,0)
    Const Buoy_Name = "PMZA-RIKI-Test"

    Const Buoy_Configuration = "As Follow" 
    
    Const Latitude_0 As Float =   48.4749 ' Degree-Decimal North 
    Const Longitude_0 As Float = -68.5111 ' Degree-Decimal East
    Const Allowed_Position_Deviation_m As Float = 50000 ' Meters. Distance from Latitude_0,Longitude_0
    
    ' ### Sampling Interval ####
    Const Buoy_Interval_Min As Long = 30
    Const PCO2_Interval_Hr As Long = 12
    Const Winch_Interval_Hr As Long = 5
    Const Rain_Interval_Hr As Long = 24
   
    ' ### Instruments Config ### 
    Const Depth_for_Winch = 210

    ' ### Threshold ###
    Const Required_Salinity As Long = 10 ' (PSU) Threshold for the Salinity Check

    ' ### Control Switches ###
    Const Bypass_Salinity As Boolean = true
    Const Disable_Well_Pump As Boolean = false

    ' ### Processing ###
    Const Seafet_Auto_Calculation As Boolean = true

    
                                                   '    (Conditional compilation)
    Const Enable_Serial_Logging As Boolean = false ' If true, a port: SerialLogging is used for loggings.     

    ' ### Instruments Enable/Disable Switches ###
    Const Instrument_Installed = "As Follow" 
    Const With_GPS As Boolean = true
    Const With_WMT700 As Boolean = true
    Const With_WXT536 As Boolean = true
    Const With_Compass As Boolean = true
    Const With_PAR As Boolean = true
    Const With_OCR_I As Boolean = false

    Const With_SBE37 As Boolean = true
    Const With_Seafet As Boolean = true
    Const With_Triplet As Boolean = true
    Const With_SUNA As Boolean = true
    Const With_PCO2 As Boolean = true
    Const With_OCR_R As Boolean = false

    Const With_Wave As Boolean = true
    Const With_ADCP As Boolean = true
    Const With_Winch As Boolean = true
    Const With_Water_Detection_Main As Boolean = true
    Const With_Power As Boolean = true
EndConstTable

Const With_Tower_485 = With_WXT536 OR With_WMT700 OR With_Compass       
Const With_Tower_Power= With_PAR OR With_WMT700 OR With_Compass OR With_OCR_I
Const With_Weather = With_WXT536 OR With_WMT700 OR With_PAR
Const With_Well_Pump = With_SBE37 OR With_Seafet OR With_SUNA OR With_OCR_R


' ###   Below are Constants the should not be changed by the user.  ###
' ###                Hence not in the Constant Table                ###
'  

' Instruments Config
Const ADCP_Num_Bin As Long = 27

' Sample Sizes (For time average)
Const GPS_Sample_Size As Long = 10     ' 1 per second for 10 seconds. ' GPS should be setup to 1 sec interval to get GPS_Sample_Size to correspond to seconds.
Const Compass_Sample_Size As Long = 60 ' 2 per second for 30 seconds

' Timers Delay                  -Associated Timers-
Const Well_Pump_Delay_Sec As Long = 30  '(Pump_Timer)
Const Weather_Delay_Sec As Long = 61    '(Weather_Timer): PAR takes at least 60 s
Const Suna_Delay_Sec As Long = 12       '(Suna_Timer)
Const WMT700_Delay_Sec As Long = 8      '(Tower_Timer)
Const Compass_Delay_Sec As Long = 4     '(Tower_Timer)
Const Triplet_Delay_Sec As Long = 20    '(Triplet_Timer): Triplet takes at least 17 seconds to sample.
Const OCR_R_Delay_Sec As Long = 8       '(Pump_Timer)
Const OCR_I_Delay_Sec As Long = 8       '(Tower_Timer)   

' ### Thresholds | Alerts ###
Const Battery_Low_Voltage_Threshold As Float = 10 'volt ? FIXME  (value < threshold)
Const Water_Detection_Main_Threshold As Float = 3000 ' TODO FIXME   (value > threshold)

' ### Which thresholds ###
Const Min_Air_Temp_for_Winch = 1
Const Max_Wave_H13_for_Winch = 2
Const Min_Wave_Period_for_Winch = 6
Const Max_Flow_for_Winch = 1
Const Max_Buoy_Speed_for_Winch = 1
Const Min_Voltage_for_Winch = 12.2


' #####################################################################
